MATLABInstrumentDriver
FileVersion: 1.0
DriverName: lecroy_8600a.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: LeCroy
InstrumentModel: WaveSurfer510
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?

CreateInitCode
  Code:
    function init(obj)
    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
    % initializes driverData
    driverData = get(obj, 'DriverData');
    driverData.measurment.type='FREQ';
    driverData.trace = 'TA';
    driverData.measurment.source = 'C1';
    driverData.sc = 'C1';
    driverData.fc = 'C1';
    driverData.source = 'C1';
    driverData.header = [];

    % Extract the interface object and configure it.
    % This driver will work with either TCPIP or GPIB.
    interface = get(obj, 'Interface');
    interfaceClass = class(interface);
    driverData.interface = interface;
    % Save the DriverData
    set(obj, 'DriverData', driverData);

ConnectInitCode
  Code:
    function init(obj)
    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
    % Get the Util group and Interface
    util = get(obj, 'Util');
    interface = get(obj, 'Interface');

    % Configure the buffer to allow space for the entire waveform.
    MAX_HEADER = 1e3;
    %memorySize = invoke(util, 'getproperty', 'Memory_SIZe?', '%u');
    %memorySize = strrep(lower(memorySize),'k','000');
    %memorySize = strrep(lower(memorySize),'m','000000');
    %memorySize = strrep(lower(memorySize),'g','000000000');
    %easier to just set to max here, also need factor of 2
    memorySize = 20E6;
    bufferSize = 2*memorySize + MAX_HEADER;

    % Ensure that the interface is closed for configuration
    if ~strcmp(get(interface, 'Status'), 'closed')
        fclose(interface);
    end

    set(interface, 'InputBufferSize', bufferSize);
    set(interface, 'OutputBufferSize', bufferSize);

    if strcmp(get(interface, 'Status'), 'closed')
        fopen(interface);
    end

    % If HEADER is not OFF then responses retrieved from
    % the device will not match what is expected, and the driver will not
    % function properly.
    invoke(util, 'sendcommand', 'COMM_HEADER OFF'); %ResponseHeaderState is readonly

    % Clear the Standard Event Status Register (SESR) to remove possible Power
    % on event, which would otherwise be returned by getError.
    invoke(util, 'getproperty', 'CMR?', '%d');

    %Set the scope to 16bit word in order to increase precision for waveform
    %transfer %note scope does not acutally have 16 bit
    set(obj.Waveform, 'Precision', 'int8');

    % LeCroy scopes publish the format of the waveform (WAVEDESC) with the
    % TEMPLATE? query.  By reading and parsing that, the code can determine
    % where all of the fields in the waveform are regardless of changes to
    % the scope.

    % Read WAVEDESC header
    invoke(util, 'sendcommand', 'TEMPLATE?');
    template = char(invoke(util, 'readbin', 'int8')');

    % Extract the starting and ending blocks for each field of the
    % waveform template.
    idxWaveDesc = regexp(template,'(WAVEDESC: BLOCK)|(ENDBLOCK)','start');
    templateStruct=regexp(template(idxWaveDesc(1): idxWaveDesc(2)),...
        '<(?<idxStart>[0-9 ]*)>[\s]*(?<name>[\w]+):\s*(?<type>[\w]+)','names');

    % Convert the indexes (currently character arrays) to numbers and account
    % for the initial byte offset (headerOffset) to index into the waveform.
    % Additionally, convert the known types in the waveform to MATLAB types.
    % Not all possible types are accounted for.

    headerOffset = 16;

    for i=1:length(templateStruct)
        % convert to numbers (from chars) and add byte offset
        templateStruct(i).idxStart = ...
            str2num(templateStruct(i).idxStart) + headerOffset;

        % convert template type names to MATLAB types
        templateValues = {'string', 'byte', 'word',  'long',  'float',  'double', 'text', 'unit_definition','enum'};
        matlabValues = {  'char',   'int8', 'int16', 'int32', 'single', 'double', 'uint8', 'uint8', 'int16'};
        idx = strmatch(templateStruct(i).type, templateValues);
        if ~isempty(idx)
            templateStruct(i).type = matlabValues{idx};
            %templateStruct(i).MatlabConversion = true;
        %else
            %templateStruct(i).MatlabConversion = false;
        end
    end

    % This parses all but the last item of the of the template because
    % the last item isn't necessary and the code is cleaner.
    % Store the starting and ending field indices under fieldnames (where the
    % name is the property name from the waveform header) of a structure.
    for i=1:length(templateStruct)-1
        wd.(templateStruct(i).name).idxStart = ...
            templateStruct(i).idxStart;
        wd.(templateStruct(i).name).idxEnd = ...
            templateStruct(i+1).idxStart - 1; %it ends at the start of the next item
        wd.(templateStruct(i).name).type = templateStruct(i).type;
    end

    % A function to extract a field, TYPECAST it and return a double representation
    % of the value.
    makeTemplateParser = @(field) ...
        @(wform) double(typecast(...
        int8(wform(field.idxStart:field.idxEnd)), ...
        field.type));

    % A function to modify the above function to return a deblanked string.
    makeTextParser = @(fcn) ...
        @(wform) deblank(char(fcn(wform)));

    driverData = get(obj, 'DriverData');

    % Using the above defined functions, I can create extractor functions
    % which will extract the desired field from a given waveform header.
    driverData.wd.getWAVE_ARRAY_COUNT = makeTemplateParser(wd.WAVE_ARRAY_COUNT);
    driverData.wd.getHORIZ_INTERVAL   = makeTemplateParser(wd.HORIZ_INTERVAL);
    driverData.wd.getHORIZ_OFFSET     = makeTemplateParser(wd.HORIZ_OFFSET);
    driverData.wd.getHORUNIT          = makeTextParser(makeTemplateParser(wd.HORUNIT));
    driverData.wd.getVERTICAL_GAIN    = makeTemplateParser(wd.VERTICAL_GAIN);
    driverData.wd.getVERTICAL_OFFSET  = makeTemplateParser(wd.VERTICAL_OFFSET);
    driverData.wd.getVERTUNIT         = makeTextParser(makeTemplateParser(wd.VERTUNIT));

    %added functions to increase wf? options
    driverData.wd.getCOMM_TYPE  = makeTemplateParser(wd.COMM_TYPE);
    driverData.wd.getCOMM_ORDER  = makeTemplateParser(wd.COMM_ORDER);
    driverData.wd.getWAVE_ARRAY_1  = makeTemplateParser(wd.WAVE_ARRAY_1);
    %driverData.wd.getWAVE_DESCRIPTOR  = makeTemplateParser(wd.WAVE_DESCRIPTOR);
    driverData.wd.getWAVE_ARRAY_COUNT  = makeTemplateParser(wd.WAVE_ARRAY_COUNT);

    set(obj, 'DriverData', driverData);

CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Date
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Query the instrument.
      propertyValue = invoke(get(obj, 'Util'), 'getproperty', 'DATE?', '%s');
      propertyValue = datenum(propertyValue, 'dd,mmm,yyyy,HH,MM,SS'); %convert the string response
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Convert from the datenum to a string if a datenum is passed
      if ischar(propertyValue)
          % pass SNTP through
          argument = propertyValue;
      else
          % convert to datestr
          argument = datestr(propertyValue, 'dd,mmm,yyyy,HH,MM,SS');
      end
      % determines what code to send to the instrument
      to_interface = sprintf('DATE %s', argument);

      % sets the instrument
      invoke(get(obj, 'Util'), 'sendcommand', to_interface);
    PermissibleType: Double none
    PermissibleType: String enum [sntp=SNTP]
    DefaultValue: 0
    ReadOnly: never
    Description: Queries the oscilloscope's internal date. The argument and return value is a MATLAB datenum.

  Property Identity
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(obj, 'Util'), 'getproperty', '*IDN?', '%s');
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    PermissibleType: String none
    ReadOnly: always

  Property ResponseHeaderState
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(obj, 'Util'), 'getproperty', 'COMM_HEADER?', '%s');
      mlValues = {'on', 'off'};
      instrValues = {'ON', 'OFF'};
      propertyValue = mlValues{strmatch(propertyValue, instrValues)};
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    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Response Header Enable State that causes the oscilloscope to either include or omit headers on query responses.

      NOTE: Although the property is not truly read only for the instrument, the value must be 'off' for the driver to operate correctly.  As a result, it is set as read-only for the driver.

  Method autoset
    MCode:
      function autoset(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', 'AUTO_SETUP');
    Description: AUTOSET Automatic parameter adjustment.

      INVOKE(OBJ, 'autoset') causes the oscilloscope to adjust its vertical, horizontal, and trigger controls to display a more stable waveform.

  Method beep
    MCode:
      function beep(obj, state)
      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
      invoke(get(obj, 'Util'), 'sendcommand', 'BUZZ BEEP');
    Description: BEEP controls the built-in piezo-electric buzzer.

      INVOKE(OBJ,'beep') causes the buzzer to sound briefly.

  Method clearerror
    MCode:
      function clearerror(obj)
      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
      invoke(get(obj, 'Util'), 'sendcommand', '*CLS');

  Method drivertest
    MCode:
      function status = drivertest(obj)
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %   lecroy_8600a.mdd.
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %   To run the test, invoke the drivertest function using the following
      %   command:
      %   status = invoke(obj,'drivertest'); % Where obj is the device object
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 06-May-2006

      %% Initialization and connect code
      % Wrap entire test in try catch.
      try

      fprintf('Test: LeCroy_Wavesurfer_510_propertiesTest\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '0;0;0';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;

      % Construct the device object.
      deviceObj = obj;

      %% Save State
      % Function_savestate (Function Test Step)
      fprintf('%s\n','Test Step 1a: Save state');

      errorcode = false;

      try
          % Execute the function.
          groupObj = get(deviceObj, 'System');
          groupObj = groupObj(1);
          invoke(groupObj, 'savestate', 5);
          pause(20);     % wait for instrument to save state

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Default Setup
      % Function_defaultSetup (Function Test Step)
      fprintf('%s\n','Test Step 1b: DefaultSetup');

      errorcode = false;
      try
          % Execute the function.
          invoke(deviceObj, 'reset');
          pause(20);     % wait for instrument to go back to default setup

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Function:Parent:Autoset
      fprintf('%s\n','Test Step 1c: Autoset');
      % Test Step 9: Function:Parent:Autoset (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          invoke(deviceObj, 'autoset');
          pause(20); % need to wait for the instrument to finish autoset

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Read waveform
      % Test Step 1d: Function_readwaveform (Function Test Step)
      fprintf('%s\n','Test Step 1d: Read Waveform');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          [y,x] = invoke(groupObj, 'readwaveform', 'C1');
          pause(20);     % wait for the read operation to finish

          % Store the result so that it can be returned.
          varargout = {varargout{:}, y,x};

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Store Waveform
      % Test Step 1e: Function_storewaveform (Function Test Step)
      fprintf('%s\n','Test Step 1e: Store Waveform');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          invoke(groupObj, 'storewaveform','C1','M1');
          pause(20);     % wait for instrument to store waveform

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Get_Parent:Date
      % Test Step 2: Get_Date (Get Property Test Step)
      fprintf('%s\n','Test Step 2: Get_Parent:Date');

      errorcode = false;
      try
          % Query the property.
          temp = get(deviceObj, 'Date');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% SET Parent:Date
      % % Test Step 3: Set_Date (Set Property Test Step)
      % fprintf('%s\n','Test Step 3: Get_Parent:Date');
      %
      % errorcode = false;
      %
      % try
      %     % Configure the property.
      %     set(deviceObj, 'Date', 'sntp');
      %
      %     % Check if instrument error occurred.
      %     result = invoke(deviceObj,'queryError');
      %     errorcode = ~strcmpi(result, noErrorMsg);
      %
      %
      % % Post information about error if one occurred.
      %     if (errorcode == true)
      %         fprintf('An instrument error occurred while setting the property value.\n');
      %         fprintf([result '\n']);
      %     end
      %
      % catch
      %     % A MATLAB error occurred.
      %     errorcode = true;
      %
      %     % Post information about error.
      %     fprintf('A MATLAB error occurred while testing the property.\n');
      %     fprintf([lasterr '\n']);
      % end
      %
      %
      % % Post message indicating if test step passed.
      % if (errorcode == true)
      %     errorOccurred = true;
      %     fprintf('Test step status: FAILED\n');
      % elseif (stepWarningOccurred == true)
      %     fprintf('Test step status: PASSED with warnings\n');
      % else
      %     fprintf('Test step status: PASSED\n');
      % end

      %% Test Step 4: Get_Parent:Identity
      fprintf('%s\n','Test Step 4: Get_Parent:Identity');
      % Test Step 4: Get_Parent:Identity (Get Property Test Step)

      errorcode = false;
      try
          % Query the property.
          temp = get(deviceObj, 'identity');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 5: Set_Acquisition:Timebase
      fprintf('%s\n','Test Step 5: Set_Acquisition:Timebase');
      % Test Step 4: Set_Acquisition:Timebase (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Acquisition');
          groupObj = groupObj(1);
          set(groupObj, 'Timebase', 50e-9);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Timebase');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 50e-9);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 50e-9\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 6: Set_Acquisition:Delay_test1
      fprintf('%s\n','Test Step 6: Set_Acquisition:Delay_test1');
      % Test Step 6: Set_Acquisition:Delay_test1 (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Acquisition');
          groupObj = groupObj(1);
          set(groupObj, 'Delay', 10e-9);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Delay');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 10e-9);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 10e-9\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 7: Set_Acquisition:Delay_test2
      fprintf('%s\n','Test Step 7: Set_Acquisition:Delay_test2');
      % Test Step 7: Set_Acquisition:Delay_test2 (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Acquisition');
          groupObj = groupObj(1);
          set(groupObj, 'Delay', 0);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Delay');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 0.0);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 0.0\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 8: Set_Acquisition:Control
      fprintf('%s\n','Test Step 8: Set_Acquisition:Control');
      % Test Step 8: Set_Acquisition:Control (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Acquisition');
          groupObj = groupObj(1);
          set(groupObj, 'Control', 'stop');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Control');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'stop');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: stop\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 9: Function:Parent:Autoset
      fprintf('%s\n','Test Step 9: Function:Parent:Autoset');
      % Test Step 9: Function:Parent:Autoset (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          invoke(deviceObj, 'autoset');
          pause(20); % need to wait for the instrument to finish autoset

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 10: Get_Acquisition:State
      fprintf('%s\n','Test Step 10: Get_Acquisition:State');
      % Test Step 10: Get_Acquisition:State (Get Property Test Step)

      errorcode = false;
      try
          % Query the property.
          groupObj = get(deviceObj, 'Acquisition');
          groupObj = groupObj(1);
          temp = get(groupObj, 'Control');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
      catch
          % A MATLAB error occurred.
      end

      % Verify that the queried value matches the expected value.
      if (errorcode == false)
          % Compare to the expected value.
          errorcode = ~isequal(temp, 'auto');

          % Post information about test step failure.
          if (errorcode == true)
              fprintf('The property is not configured to the expected value.\n');

              % Post actual value.
              if isnumeric(temp)
                  fprintf(['Actual value: ' num2str(temp)]);
              else
                  fprintf(['Actual value: ' temp]);
              end

              % Post expected value.
              fprintf('Expected value: ''auto''\n');
          end
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 11: Set_Channel:Bandwidth
      fprintf('%s\n','Test Step 11: Set_Channel:Bandwidth');
      % Test Step 11: Set_Channel:Bandwidth (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'BandwidthLimit', 'on');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'BandwidthLimit'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('on');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: on\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 12: Set_Channel:Coupling
      fprintf('%s\n','Test Step 12: Set_Channel:Coupling');
      % Test Step 12: Set_Channel:Coupling (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'Coupling', '50ohms');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'Coupling'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('50ohms');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: 50ohms\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 13: Set_Channel:Position
      fprintf('%s\n','Test Step 13: Set_Channel:Position');
      % Test Step 13: Set_Channel:Position (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'Position', 0);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'Position'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal(0);
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: 0\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 14: Set_Channel:Probe
      fprintf('%s\n','Test Step 14: Set_Channel:Probe');
      % Test Step 14: Set_Channel:Probe (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'Probe', 20);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'Probe'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal(20);
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: 20\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 15: Set_Channel:Scale
      fprintf('%s\n','Test Step 15: Set_Channel:Scale');
      % Test Step 15: Set_Channel:Scale (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'Scale', 1);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'Scale'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal(1);
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: 1\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 16a: Set_Channel:State
      fprintf('%s\n','Test Step 16a: Set_Channel:State');
      % Test Step 16a: Set_Channel:State (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'State', 'off');
          pause(5); % instrument takes some time to turn off all the channels

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'State'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('off');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: off\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 16b: Set_Channel:State
      fprintf('%s\n','Test Step 16b: Set_Channel:State');
      % Test Step 16b: Set_Channel:State (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Channel');
          set(groupObj, 'State', 'on');
          pause(5); % instrument takes some time to turn on all the channels

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'State'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('on');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: on\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 17: Set_Cursor:Type
      fprintf('%s\n','Test Step 17: Set_Cursor:Type');
      % Test Step 17: Set_Cursor:Type (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Cursor');
          groupObj = groupObj(1);
          set(groupObj, 'CursorType', 'vertical absolute');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'CursorType');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'vertical absolute');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: vertical absolute\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 18: Set_Cursor:Source
      fprintf('%s\n','Test Step 18: Set_Cursor:Source');
      % Test Step 18: Set_Cursor:Source (Set Property Test Step)

      % This test step generated no code. Most likely because a
      % property or function to test was not selected.
      fprintf('Test step status: PASSED\n');

      %% Trigger
      % Test Step 19a: Function_trigger (Function Test Step)
      fprintf('%s\n','Test Step 19a: Trigger');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'Trigger');
          groupObj = groupObj(1);
          invoke(groupObj, 'trigger');
          pause(10);  % wait for the trigger call

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 19c: Set_Display:Contrast
      fprintf('%s\n','Test Step 19: Set_Display:Contrast');
      % Test Step 19: Set_Display:Contrast (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Display');
          groupObj = groupObj(1);
          set(groupObj, 'Contrast', 50.0);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Contrast');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 50.0);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 50.0\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 20: Set_Display:Grid
      fprintf('%s\n','Test Step 20: Set_Display:Grid');
      % Test Step 20: Set_Display:Grid (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Display');
          groupObj = groupObj(1);
          set(groupObj, 'Grid', 'single');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Grid');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'quad');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: quad\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 21: Set_Display:Persistence
      fprintf('%s\n','Test Step 21: Set_Display:Persistence');
      % Test Step 21: Set_Display:Persistence (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Display');
          groupObj = groupObj(1);
          set(groupObj, 'Persistence', 5);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Persistence');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 5);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 5\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 22: Set_Display:Style
      fprintf('%s\n','Test Step 22: Set_Display:Style');
      % Test Step 22: Set_Display:Style (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Display');
          groupObj = groupObj(1);
          set(groupObj, 'Style', 'vectors');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Style');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'vectors');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: vectors\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 23: Set_Measurement:Type
      fprintf('%s\n','Test Step 23: Set_Measurement:Type');
      % Test Step 23: Set_Measurement:Type (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Measurement');
          set(groupObj, 'MeasurementType', 'period');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'MeasurementType'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('period');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: period\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 24: Set_Measurement:Source
      fprintf('%s\n','Test Step 24: Set_Measurement:Source');
      % Test Step 24: Set_Measurement:Source (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Measurement');
          set(groupObj, 'Source', 'channel2');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, {'Source'});

              % Compare to the expected value.
              expectedValue = cell(size(groupObj))';
              [expectedValue{:}] = deal('channel2');
              errorcode = ~isequal(currentValue, expectedValue);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  for i=1:length(currentValue)
                      c = currentValue{i};
                      if isnumeric(c)
                          fprintf(['Actual value(' num2str(i) '): ' num2str(c) '\n']);
                      else
                          fprintf(['Actual value(' num2str(i) '): ' c '\n']);
                      end
                  end

                  % Post expected value.
                  fprintf('Expected value: channel2\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 25: Get_Measurement:Value
      fprintf('%s\n','Test Step 25: Get_Measurement:Value');
      % Test Step 25: Get_Measurement:Value (Get Property Test Step)

      errorcode = false;
      try
          % Query the property.
          groupObj = get(deviceObj, 'Measurement');
          temp = get(groupObj, {'Value'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 26: Set_Sequence:Max
      fprintf('%s\n','Test Step 26: Set_Sequence:Max');
      % Test Step 26: Set_Sequence:Max (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Sequence');
          groupObj = groupObj(1);
          set(groupObj, 'Max', 1000.0);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Max');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 1000);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 1000\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 27: Set_Sequence:Mode
      fprintf('%s\n','Test Step 27: Set_Sequence:Mode');
      % Test Step 27: Set_Sequence:Mode (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Sequence');
          groupObj = groupObj(1);
          set(groupObj, 'Mode', 'on');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Mode');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'on');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: on\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 28: Set_Sequence:Segment
      fprintf('%s\n','Test Step 28: Set_Sequence:Segment');
      % Test Step 28: Set_Sequence:Segment (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Sequence');
          groupObj = groupObj(1);
          set(groupObj, 'Segment', 500.0);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Segment');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 500.0);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 500.0\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 29: Set_Trigger:Mode
      fprintf('%s\n','Test Step 29: Set_Trigger:Mode');
      % Test Step 29: Set_Trigger:Mode (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Trigger');
          groupObj = groupObj(1);
          set(groupObj, 'Mode', 'stop');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Mode');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'stop');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: stop\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 30: Set_Trigger:Slope
      fprintf('%s\n','Test Step 30: Set_Trigger:Slope');
      % Test Step 30: Set_Trigger:Slope (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Trigger');
          groupObj = groupObj(1);
          set(groupObj, 'Slope', 'falling');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Slope');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'falling');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: falling\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 31: Set_Trigger:Source
      fprintf('%s\n','Test Step 31: Set_Trigger:Source');
      % Test Step 31: Set_Trigger:Source (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Trigger');
          groupObj = groupObj(1);
          set(groupObj, 'Source', 'external');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Source');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'external');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: external\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 32: Set_Trigger:Type
      fprintf('%s\n','Test Step 32: Set_Trigger:Type');
      % Test Step 32: Set_Trigger:Type (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Trigger');
          groupObj = groupObj(1);
          set(groupObj, 'TriggerType', 'stateQualified');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'TriggerType');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'stateQualified');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: stateQualified\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 33: Set_Waveform:ByteOrder
      fprintf('%s\n','Test Step 33: Set_Waveform:ByteOrder');
      % Test Step 33: Set_Waveform:ByteOrder (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          set(groupObj, 'ByteOrder', 'bigEndian');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'ByteOrder');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'bigEndian');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: bigEndian\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 34: Set_Waveform:EndingPoint
      fprintf('%s\n','Test Step 34: Set_Waveform:EndingPoint');
      % Test Step 34: Set_Waveform:EndingPoint (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          set(groupObj, 'EndingPoint', 100);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'EndingPoint');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 100);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 100\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 35: Set_Waveform:FirstPoint
      fprintf('%s\n','Test Step 35: Set_Waveform:FirstPoint');
      % Test Step 35: Set_Waveform:FirstPoint (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          set(groupObj, 'MaxNumberPoint', 10);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'MaxNumberPoint');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 10);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 10\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 36: Set_Waveform:MaxNumberPoint
      fprintf('%s\n','Test Step 36: Set_Waveform:MaxNumberPoint');
      % Test Step 36: Set_Waveform:MaxNumberPoint (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          set(groupObj, 'MaxNumberPoint', 2000);

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'MaxNumberPoint');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 2000);

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: 2000\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Test Step 37: Set_Waveform:Precision
      fprintf('%s\n','Test Step 37: Set_Waveform:Precision');
      % Test Step 37: Set_Waveform:Precision (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          set(groupObj, 'Precision', 'int8');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(groupObj, 'Precision');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'int8');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.\n');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue) '\n']);
                  else
                      fprintf(['Actual value: ' currentValue '\n']);
                  end

                  % Post expected value.
                  fprintf('Expected value: int8\n');
              end

              % Check if instrument error occurred.
              result = invoke(deviceObj,'queryError');
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.\n');
                  fprintf([result '\n']);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Load Initial State
      % Test Step 38: Function_loadstate (Function Test Step)
      fprintf('%s\n','Test Step 38: Load State');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'System');
          groupObj = groupObj(1);
          invoke(groupObj, 'loadstate', 5);
          pause(10);   % wait for the instrument to get loaded properly

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Cleanup and Posting Results

      % Post results.
      fprintf(['Stop time: ' datestr(now) '\n']);
      if (errorOccurred == true)
          fprintf('Test status: FAILED\n');
          status = 0;
      elseif (warningOccurred == true)
          fprintf('Test status: PASSED with warnings\n');
          status = 1;
      else
          fprintf('Test status: PASSED\n');
          status = 1;
      end

      catch
          % An error occurred while running the test.
          fprintf('An error occurred while executing the test.\n');
          fprintf([lasterr '\n']);
      end
    Description: This function is intended only to test the driver code with an instrument.

  Method initiateSelfTest
    MCode:
      function initiateSelfTest(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', '*TST?');
    Description: Start the instrument's built-in test routine.

      INVOKE(obj, 'initiateSelfTest') initiates the instrument's test routine.

      This is a workaround to a limitation of instrument drivers.  It replaces SELFTEST(ob).

  Method queryError
    MCode:
      function errormsg = queryError(obj)
      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errormsg = invoke(get(obj, 'Util'), 'getproperty', '*ESR?; CMR?; EXR?', '%s');
    Description: Query the error code from the last command on the instrument.

      INVOKE(obj, 'queryError') returns the error code from the instrument.

      This is a workaround to a limitation of instrument drivers.  It replaces GETERROR(obj).

  Method reset
    MCode:
      function reset(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', '*RST;COMM_HEADER OFF;');
    Description: Reset the state of the instrument to defaults.

      INVOKE(obj, 'reset') returns the instrument to its default configuration.

      This is a workaround to a limitation of instrument drivers.  It replaces DEVICERESET(obj).

  Method selfcalibrate
    MCode:
      function selfcalibrate(obj)
      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
      invoke(get(obj, 'Util'), 'sendcommand', '*CAL?');
    Description: SELFCALIBRATE Performs an internal self-calibration.

      INVOKE(obj, 'selfcalibrate') to self-calibrate the oscilloscope. This function does not return any status information.

Group acquisition
  Description: The aquisition group define properties and function related to how the waveform is acquired and the timebase.
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property Control
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_MoDe?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_MoDe', propertyValue);
    PermissibleType: String enum [single=SINGLE, normal=NORMAL, stop=STOP, auto=AUTO]
    DefaultValue: single
    ReadOnly: never
    Description: Tells the oscilloscope when to stop taking acquisitions for edge trigger type.

  Property Delay
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_DeLay?', '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_DeLay', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the capture offset from the trigger event.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'Control');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(set(obj, 'Control', propertyValue));
    PermissibleType: String enum [stop=STOP, run=NORM, auto=AUTO, single=SINGLE]
    DefaultValue: run
    ReadOnly: never
    Description: Starts or stops oscilloscope acquisitions.

  Property Timebase
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'Time_DIV?', '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'Time_DIV', propertyValue);
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the time per divison for the main time base.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

Group channel
  Size: 4
  Mappings
    ChannelMap Command="C4" Index="4"
    ChannelMap Command="C3" Index="3"
    ChannelMap Command="C2" Index="2"
    ChannelMap Command="C1" Index="1"

  Property BandwidthLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'BandWidth_Limit?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % Bandwidth_limit is returned for every channel.  Return the channel of interest.
      try
          %gets the hardware index number
          hw = obj(1).HwIndex;
          %There are two items returned for each channel:
          %channel then value.  We would like to index into the
          %value.
          hw = hw * 2;

          % returns the value
          propertyValue = lower(idn{hw});
      catch
          propertyValue = lower(idn{1});
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('BandWidth_Limit C%i,%s',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [200mhz=200MHZ, 1ghz=1GHZ, 3ghz=3GHZ, 4ghz=4GHZ, on=20MHZ, off=OFF]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the bandwidth setting of the specified oscilloscope channel.

  Property Coupling
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface);

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');
      propertyValue = value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing %s', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: String enum [ac=A1M, dc=D1M, ground=GND, 50ohms=D50]
    DefaultValue: ac
    ReadOnly: never

  Property Position
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument.
      to_interface = sprintf('C%i:OFfSeT?', hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:OFfSeT %i', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double bounded [Max="10.0" Min="-10.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the vertical position of the specified oscilloscope channel.

  Property Probe
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument
      to_interface = sprintf('C%i:ATTeNuation?', hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:ATTeNuation %i',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the attenuation factor of the specified channel.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Scale
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument.
      to_interface = sprintf('C%i:Volt_DIV?',hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g')
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:Volt_DIV %i',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 20.0
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');

      % returns the value
      propertyValue=value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce %s',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [off=OFF, on=ON ]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable the display of the waveform on the scope.

Group cursor
  Size: 1
  Mappings ChannelMap Command="Cursor1" Index="1"

  Property CursorType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'sendcommand', 'CuRsor_MeaSure?');
      propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'readresponse', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'CuRsor_MeaSure', propertyValue);
    PermissibleType: String enum [fail=FAIL, horizontal relative=HREL, pass=PASS, vertical absolute=VABS, vertical relative=VREL, custom stat=CUST, STAT, horizontal parameters stat=HPAR, STAT, horizontal relative abs=HREL, ABS, horizontal relative delta=HREL, DELTA, horizontal relative slope=HREL, SLOPE, standard voltage parameters stat=VPAR, STAT, vertical relative abs=VREL, ABS, vertical relative delta=VREL, DELTA, none=OFF, horizontal absolute=HABS, custom=CUST, custom stat=CUST, STAT, horizontal parameters=HPAR, horizontal relative delta + abs=HREL, DELTA+ABS, vertical relative delta + abs=VREL, DELTA+ABS, vertical parameters=VPAR]
    DefaultValue: fail
    ReadOnly: never
    Description: Selects the cursor type.

  Property HorizontalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HABS',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HABS, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first horizontal bar cursor position.

  Property HorizontalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HREF',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HREF, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second horizontal bar cursor position.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % gets the user specified source
      propertyValue = driverData.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4, traceA=TA, traceB=TB, traceC=TC, traceD=TD]
    DefaultValue: Channel1
    ReadOnly: never
    Description: Sets or queries the waveform that is the source of the vertical and horizontal scale factors used in determining cursor values.

  Property VerticalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VABS',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VABS, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first vertical bar cursor position.

  Property VerticalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VREF',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VREF, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second vertical bar cursor position.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Contrast
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'INTenSity?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % The response looks like TRACE, %val, GRID, %val
      % We are only interested in the GRID intensity
      propertyValue = idn{4};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('INTenSity GRID,%i',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Set or query the contrast of the display grid.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Grid
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'GRID?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'GRID', propertyValue);
    PermissibleType: String enum [single=SINGLE, auto=AUTO, xy=XYONLY, xysingle=XYSINGLE]
    DefaultValue: single
    ReadOnly: never
    Description: Sets or queries the instrument's grid style.

  Property Persistence
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Tell the instrument you want it to tell you the value
      invoke(util, 'sendcommand', 'PErsist_SetUp?');

      % queries the instrument
      idn = invoke(util, 'scanresponse');

      % retrieve the value from the instrument
      if(ischar(idn{1}))
          propertyValue = 'infinite';
      else
          propertyValue = idn{1};
      end;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what data type is and sets the instrument
      if(ischar(propertyValue))
          fmt = '%s';
      else
          fmt = '%g';
      end

      invoke(util, 'sendcommand', sprintf(['PErsist_SetUp ', fmt, ',ALL'],propertyValue));
    PermissibleType: String enum [infinite=infinite]
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: infinite
    ReadOnly: never
    Description: Sets the length of time that data points are displayed.

  Property Style
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'DoT_JoiN?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'DoT_JoiN', propertyValue);
    PermissibleType: String enum [dots=ON, vectors=OFF]
    DefaultValue: Dots
    ReadOnly: never
    Description: Selects how to display the waveform data.

Group measurement
  Size: 5
  Mappings
    ChannelMap Command="IMMED" Index="5"
    ChannelMap Command="MEAS4" Index="4"
    ChannelMap Command="MEAS3" Index="3"
    ChannelMap Command="MEAS2" Index="2"
    ChannelMap Command="MEAS1" Index="1"

  Property MeasurementType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the measurement type from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.measurment.type;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.measurment.type = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData)
    PermissibleType: String enum [frequency=FREQ, mean=MEAN, period=PER, peak2peak=PK2PK, crms=CRM, amplitude=AMPL, area=AREA, base=BASE, StandardDeviation=SDEV]
    DefaultValue: frequency
    ReadOnly: never
    Description: Sets or query the measurement type.  By default this driver supports the standard measurement types of the oscilloscope, and does not include any measurements supported only by expansion modules.  To add additional measurement types supported by your model, edit the driver using midedit.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the source from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.measurment.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.measurment.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData)
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

  Property Value
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % gets channel to use for measurement from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      chan = driverData.measurment.source;

      % gets the measurement type
      type = driverData.measurment.type;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PArameter_VAlue? %s',chan,type);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{2};
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the value of a measurement.  If the object is the immediate measurement object (the HwName property is 'IMMED') this property is always valid.  For the standard periodic measurements, it is only a valid valid if the MesesurementType is not 'none'.

Group sequence
  Size: 1
  Mappings ChannelMap Command="Sequence1" Index="1"

  Property Max
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      propertyValue = idn{3};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      if(strcmp('OFF',idn{1}))
          warning('mode is set to OFF right now and is being changed to ON so that max can be changed')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE ON,%g,%g ',idn{2},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max size of the sequence mode.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: never
    Description: Sets or queries the sequence mode.

  Property Segment
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % gets the mode from the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s,%i',idn{1},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double enum [50.0, 200.0, 500.0, 2000.0]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max number of segments.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method loadstate
    MCode:
      function loadstate(obj, location)
      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% LOCATION is the specified storage location

      %get the icdevice
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >6 || location <0
                  error('LOCATION must be between 0, the default state, and 6 inclusive');
          end

      % Send memory name query command
      invoke(util, 'sendcommand', ['*RCL ' num2str(location)])
    Description: LOADSTATE  Recall a previously stored state.

      INVOKE(OBJ, 'loadstate', location) restores the state of the oscilloscope from a copy of settings stores in memory.  Location must be a scalar from 1 to 5.

  Method savestate
    MCode:
      function savestate(obj, location)
      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% LOCATION is the specified storage location

      %get the icdevice
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >6 || location <1
                  error('LOCATION must be between 1 and 6 inclusive');
          end

      % Send memory name query command
      invoke(util, 'sendcommand', ['*SAV ' num2str(location)])
    Description: SAVESTATE  Save the current state of the oscilloscope.

      INVOKE(OBJ,'savestate',location) stores an instrument configuration at the specified memory location, LOCATION.

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property Coupling
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRIG_COUPLING?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface);

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');
      propertyValue = value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing %s', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: String enum [ac1m=AC1M, dc1m=DC1M, 50ohms=DC50, ground=GND, dc=DC]
    DefaultValue: dc
    ReadOnly: never
    Description: Sets or queries the signal coupling type at the input of the trigger circuit.

  Property Level
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_LeVel?', '%g')
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_LeVel', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the oscilloscope primary trigger level.  Max and Min values are dependent on the scale of channel type.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_MoDe?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_MoDe', propertyValue);
    PermissibleType: String enum [auto=AUTO, run=NORM, single=SINGLE, stop=STOP]
    DefaultValue: auto
    ReadOnly: never
    Description: Sets the trigger mode for the edge trigger type.

  Property Slope
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_SLope?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_SLope', propertyValue);
    PermissibleType: String enum [falling=NEG, rising=POS]
    DefaultValue: rising
    ReadOnly: never
    Description: Selects a rising or falling slope for the main edge trigger.  This is equivalent to setting Slope in the Trigger menu.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
       %get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the just the source value
      propertyValue = idn{3};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s,SR,%s',idn{1},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [channel1=C1, channel2=C2, external=EX, external10=EX10, channel3=C3, channel4=C4, acline=LINE, etm10=ETM10, pa=PA]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets of the source for the main edge trigger.  This is equivalent to setting Source in the Trigger menu.

  Property TriggerType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % gets just the trigger type
      propertyValue = idn{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [edge=EDGE, drop=DROP, glitch=GLIT, interval=INTV, stateQualified=SQ, edgeQualified=TEQ, standard=STD, singleSource=SNG]
    DefaultValue: edge
    ReadOnly: never
    Description: Sets the type of oscilloscope trigger.  This is equivalent to setting Type in the Trigger menu.

  Method trigger
    MCode:
      function trigger(obj)
      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
      invoke(get(get(obj, 'Parent'), 'Util'), 'sendcommand', 'FRTR');
    Description: TRIGGER Trigger the instrument.

      INVOKE(OBJ,'TRIGGER') performs a Group Execute trigger.

      Use: set(Wavesurfer510.Acquisition(1), 'Control', 'single'); to get this to work, also try *TRG instead of FRTR depending on your scope

      Use set(Waveform,'Precision','int16'); before transfer to switch to 16 transfer mode and increase persision for transfer (you'd be better off guessing the voltage into your scope by licking the wires than using 8 bit transfer). if fact I've added this to the initial setup just so I don't have to do it every time.

Group util
  Size: 1
  Mappings ChannelMap Command="util1" Index="1"

  Method getproperty
    MCode:
      function propertyValue = getproperty(obj, property, fmt)
      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
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand',  property);

      % Retrieve the result from the instrument.
      propertyValue = invoke(util, 'readresponse', fmt);

      % Remove whitespace and convert to the desired format.
      if ischar(propertyValue)
          propertyValue = regexp(propertyValue, '(\S+)', 'tokens', 'once');
          propertyValue = propertyValue{1};
          propertyValue = sscanf(propertyValue, fmt);
      end

  Method readbin
    MCode:
      function data = readbin(obj, type)
      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
      device = get(obj, 'Parent');
      driverData = get(device, 'driverData');

      %get the interface
      interface = get(device, 'Interface');

      % Initialize the result.
      data = [];

      % Determine the size of each element to be read.
      sampleElement = cast(1, type);
      sampleElementProperties = whos('sampleElement');
      elementSize = sampleElementProperties.bytes;

          % Read one less than the InputBufferSize to allow us to check for EOI
          elementsToRead = get(interface, 'InputBufferSize')/elementSize;
          msg = [];
          foundEoiMsg = 'The EOI line was asserted before SIZE values were available.';
          timeoutSubMsg  = 'timeout';
          % Read and concatenate while there is no EOI or timeout.
          % If the data to be read is exactly InputBufferSize, FREAD will fail with
          % a timeout.  This should be rare however.
          while isempty(msg) %(~strcmp(msg, foundEoiMsg) || isempty(findstr(msg, timeoutSubMsg)))
              [newData, count, msg] = fread(interface, elementsToRead, type);
              data = [data; newData];
          end
          %msg
          % TODO: If the msg was not a timeout or EOI, it should be reported.

      %data = cast(data, type);

  Method readresponse
    MCode:
      function msg = readresponse(obj, fmt)
      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
      % Make sure fmt was passed before reading the data.
      if ~exist('fmt', 'var')
          error('Util::READRESPONSE requires two arguments');
      end
      %interface = get(device, 'Interface');
      % Read all available input and format it appropriately.
      msg = sscanf(char(invoke(obj, 'readbin', 'int8')), [fmt, '\n']);
      %msg = sscanf(char(query(interface,

  Method scanresponse
    MCode:
      function out = scanresponse(obj)
      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
      %read the value
      response = invoke(obj, 'readresponse', '%s');

      % This behaves much like SCANSTR
      % by splitting the string into a cell array.
      delimiter = ',; ';
      format = '%s';

      if ~ischar(response)
          response = char(response);
      end

      [data, count, msg] = sscanf(response, '%c');

      out=strread(data,format,'delimiter',delimiter);
      for i = 1:length(out)
          if ~isnan(str2double(out{i}))
              out{i} = str2double(out{i});
          end
      end

  Method sendbin
    MCode:
      function sendbin(obj, data, type)
      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
      % Calculate the data size.
      s = whos('data');

      device = get(obj, 'Parent');
      driverData = get(device, 'driverData');

      %get the interface
      interface = driverData.interface;

      fwrite(interface, data, type);

  Method sendcommand
    MCode:
      function sendcommand(obj, cmd)
      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
      invoke(obj, 'sendbin', cmd, 'char'); %perhaps this should be 'char'

  Method setproperty
    MCode:
      function setproperty(obj, property, propertyValue)
      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
      % build the command string with either a string or numeric argument
      if ischar(propertyValue)
          fmt = '%s %s';
      else
          fmt = '%s %g';
      end
      cmd = sprintf(fmt, property, propertyValue);
      % queries the instrument
      invoke(obj, 'sendcommand', cmd);

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property ByteOrder
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'Comm_ORDer?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'Comm_ORDer', propertyValue);
    PermissibleType: String enum [bigEndian=HI, littleEndian=LO]
    DefaultValue: littleEndian
    ReadOnly: never
    Description: Sets or queries which byte of binary waveform data is transmitted first during a waveform transfer.

  Property EndingPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      endpnt = idn{6}+idn{4};

      % returns the value calculated
      propertyValue = endpnt;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      endpt = propertyValue - idn{6};

      % sets the instrument
      if(endpt < 0)
          warning('endpoint needs to be larger then the first point')
      else
          invoke(util, 'sendcommand', sprintf('WaveForm_SetUp  NP,%i',endpt));
      end
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the ending point for waveformm data transfers.

  Property FirstPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns only the first point
      propertyValue = idn{6};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % sets the instrument
      invoke(util, 'sendcommand', sprintf('WaveForm_SetUp  FP,%i',propertyValue));
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the starting point for waveformm data transfers.

  Property MaxNumberPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns only the maxnumberpoint
      propertyValue = idn{4};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('WaveForm_SetUp  NP,%i',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The maximum number of acqusition data points.

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'COMM_FORMAT?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      propertyValue = sprintf('%s,%s',idn{2},idn{3});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('COMM_FORMAT DEF9, %s',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [ASCII=WORD,HEX, int16=WORD,BIN, int8=BYTE,BIN]
    DefaultValue: ASCII
    ReadOnly: never
    Description: Sets or queries the precision  for waveformm data transfers.

  Method readwaveform
    MCode:
      function [y, x, Info] = readwaveform(obj, source, scaleWaveform)
      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
      % sees if there is any input
      if (nargin == 0)
          return;
      end
      device = get(obj, 'Parent');
      interface = get(device, 'Interface');

      % initializes everything to empty/false/unknown
      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';
      ygain = 'unknown';
      yintercept = 'unknown';
      length = 'unknown';
      xinterval = 'unknown';
      xintercept = 'unknown';
      cts = 'unknown';
      cts = 'unknown';
      header = [];
      Info = struct();

      %checks to see if the source input is a valid value
      validValues = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD', 'M1', 'M2', 'M3', 'M4'};
      scopeValues = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD', 'M1', 'M2', 'M3', 'M4'};
      idx = strmatch(source,validValues, 'exact');

      %gives error if the channel is not a valid value
      if (isempty(idx))
          error('Invalid SOURCE. CHANNEL must be one of: C1, C2, C3, C4, TA, TB, TC, TD, M1, M2, M3, M4');
      end

      %sets the source to its property value
      trueSource = scopeValues{idx};

      % checks to see if the scale entered is a valid value
      if exist('scaleWaveform', 'var')
              scale = scaleWaveform;
      end

      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverdata
      driverData = get(device, 'DriverData');
      wd = driverData.wd;

      % store old user setings
      try
          oldPrecision = get(obj, 'Precision');
          oldByteOrder = get(obj, 'ByteOrder');
      catch
          warning('Could not get precision or byte order, If this error occurs only occasionally, check if reset8bit() is working')
          error(lasterr)
      end
      % changes the precision and byteorder so that wave form can be read
      try
          set(obj, 'ByteOrder', 'littleEndian');
          %set(obj, 'Precision', 'int16'); %set to 16 to get most precision from scope

      catch
          warning('could not set precision or ByteOrder before transfer')
          error(lasterr)

      end

      %% Get wave from the instrument
      try
          % Issue the curve transfer command.
              to_interface = sprintf('%s:WaveForm? ALL',trueSource);
              invoke(util, 'sendcommand', to_interface);

          % get wave from the instrument
              raw = invoke(util, 'readbin', 'int8'); %need to still read bytes (int8) bc header
                  %is still transfered the same, and I don't want to rerwrite header parser
                  %and transfering header and wf sepeately with '%s:WaveForm? DESC' &
                  %%s:WaveForm? DAT1' causes all kinds of problems because the
                  %headers get unpredictable.

          % separate the data from the descriptor block
              header = raw(1:361)';
              y = raw(362:end-1)'; %last bit in 16bit precision is some closing bit,
                  %we can drop it, and we need to in order to have an even number.
                  %Can check length to show we still get the right number of points,
                  %which for my scope (Wavesurfer 10) is 2 more than the memory
                  %setting.

      catch
          % return the settings back to 8 bit and prefered endian and display
          % an error that tells why the waveform was not read
          try
              fprintf(interface,'COMM_FORMAT DEF9, BYTE, BIN'); %the rest of the driver only works in 8bit.
                  %as we've changed to 16, we need to make a direct call to the scope, without the
                  %drivers set() function, to change back to 8bit. we must do this before
                  %any other get(), set(), or invoke() is made, becides readbin().
              get(obj, 'Precision'); %let the driver know we changed back to 8 bit,
                  %remove semicolon to check if this gets reset properly
              set(obj, 'ByteOrder', oldByteOrder);
          catch
              warning('Could not directly reset to 8bit')
          end
          warning('Error during waveform transfer')
          error(lasterr)% as matlab protects instrament toolbox code,
                  %this is unlikely to be helpful. You are better off putting your own warning()
                  %or error() here. NB: only one error() will go through, and
                  %will stop execution.
      end

      % make sure that data was transfered
      if (isempty(raw))
          % returns the settings back to what the user had them and displays
          % an error that the waveform did not get read in
          try
              fprintf(interface,'COMM_FORMAT DEF9, BYTE, BIN'); %the rest of the driver only works in 8bit.
                  %as we've changed to 16, we need to make a direct call to the scope, without the
                  %drivers set() function, to change back to 8bit. we must do this before
                  %any other get(), set(), or invoke() is made, becides readbin().
              get(obj, 'Precision'); %let the driver know we changed back to 8 bit,
                  %remove semicolon to check if precision is reset properly
              set(obj, 'ByteOrder', oldByteOrder);
          catch
             error('An error occurred while reading the waveform.');
          end
      end

      %typecast y

      %y = typecast(cast(y,'int8'),'int16'); %this works, as both win64 and currently oscope are in little endian
      % We care casting the double returned from readbin into a 8 bit with
      % cast(), so that we don't need to save huge 64 bit doubles. if you wanted
      % bigendian to work you could add a swapbytes() to the front of this, but
      % youd have to fix the header parser.

      % This has no loss of percision bc the data in these doubles are really int8. We then group every pair
      % together with typecast(), which gives us the 16bit data the scope is
      % trying to write

      %Parse header so that we can return critial info to matlab. This section
      %could use expansion. Make new wd.fuctions in connect() code.
      xunit = wd.getHORUNIT(header);
      yunit = wd.getVERTUNIT(header);
      ygain = wd.getVERTICAL_GAIN(header);
      yintercept = wd.getVERTICAL_OFFSET(header);
      length = wd.getWAVE_ARRAY_COUNT(header);
      xinterval = wd.getHORIZ_INTERVAL(header);
      xintercept = wd.getHORIZ_OFFSET(header);
      comm_type = wd.getCOMM_TYPE(header);
      endian = wd.getCOMM_ORDER(header);

      %convert comm type and endian
      if comm_type == 0
          cts = 'int8';
      elseif comm_type == 1
          cts = 'int16';
      end

      if endian == 0
          eds = 'bigEndian';
      elseif endian == 1
          eds = 'littleEndian';
      end

      Info = struct('xunit',xunit,'yunit',yunit,'ygain',ygain,'yintercept',yintercept,'length',length,'xinterval',xinterval,'xintercept',xintercept,'bitdepth',cts,'endian',eds,'fullheader',header);

      % Rescale the waveform if requested.
      if scale
          % rescale the Y
          y = typecast(y,'double') .* wd.getVERTICAL_GAIN(header) - wd.getVERTICAL_OFFSET(header);
      end

      % Calculate the horizontal points. I doubt you want this if you are trying
      % to get raw data with invoke(obj,'readwaveform','channel',false), so call [y,~,info] = invoke...()
      x = (0:length-1).*xintercept + xintercept;

      %return as columns
      x = x';
      y = y';

      %flush buffers after transfer
      flushinput(interface); % I beleive full buffers were causing wierd errors where the scope refuesd to read or write anything, but only sometimes. this seems to work.
      flushoutput(interface);

      % Restore 8bit and endian initial settings
      try
          fprintf(interface,'COMM_FORMAT DEF9, BYTE, BIN'); %the rest of the driver only works in 8bit.
              %as we've changed to 16, we need to make a direct call to the scope, without the
              %drivers set() function, to change back to 8bit. we must do this before
              %any other get(), set(), or invoke() is made, becides readbin().
          get(obj, 'Precision'); %let the driver know we changed back to 8 bit,
              %remove semicolon to check if this gets reset properly
          set(obj, 'ByteOrder', oldByteOrder);
      catch
          warning('Could not directly reset to 8bit')
          error(lasterr)
      end
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [y, x, Info] = INVOKE(obj, 'readwaveform', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are C&lt;x&gt;, T&lt;x&gt;, and
      M&lt;z&gt;, where &lt;x&gt; is a number between 1 and the number of channels on the instrument,  &lt;y&gt; is a letter between A and the number of reference channels on the instrument, and &lt;z&gt; is a number between 1 and the number of memory locations on the instrument.

      [Y, T, XUNIT, YUNIT, HEADER] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.  The default value for SCALE is true.



      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'C1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

  Method storewaveform
    MCode:
      function storewaveform(obj, channel, location)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      scopeValuesC = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD'};
      scopeValuesM = {'M1', 'M2', 'M3', 'M4'};

      % checks to see if location is a valid value
      idxM = strmatch(location, {'M1', 'M2', 'M3', 'M4'}, 'exact');
      if (isempty(idxM))
          error('Invalid value.LOCATION must be one of: M1, M2, M3, M4');
      end
      trueLocation = scopeValuesM{idxM};

      % checks to see if channel is a valid value
      idxC = strmatch(channel,{'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD'} , 'exact');
      if (isempty(idxC))
          error('Invalid value.CHANNEL must be one of: C1, C2, C3, C4, TA, TB, TC, TD');
      end
      trueChannel = scopeValuesC{idxC};

      % determines what code to send to the instrument
      to_interface = sprintf('STOre %s,%s',trueChannel,trueLocation);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    Description: STOREWAVEFORM Save a waveform to oscilloscope memory.

      INVOKE(OBJ, 'storewaveform', CHANNEL, LOCATION) saves the waveform from CHANNEL to memory location, LOCATION.

      Example:
      	invoke(obj, 'storewaveform', 'C1','M1');
